PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = N170
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent Stimulus
      image [set every repeat] = $face
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import serial
        trigPort = serial.Serial('/dev/cu.usbmodem11201');
      Begin Routine:
        t = trigger.to_bytes(1, 'little')
        trigPort.write(t)
      End Experiment:
        trigPort.close
  Routine isi
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random() + 1
      text [set every repeat] = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = StimList.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/41.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/42.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/43.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/44.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/45.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/46.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/47.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/48.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/49.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/50.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/51.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/52.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/53.jpg', 'trigger': 1},
      {'face': '/Users/jantzek/Documents/Easy_BCI/PsychoPy Examples/N170/Stim/shoes/mens/54.jpg', 'trigger': 1}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
    Routine isi
    Routine trial
  LoopTerminator trials
