PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = veo
  keyboardBackend = ioHub
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Routines
  Routine phase1
    CodeComponent serialPortCode
      Code Type = Auto->JS
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      Begin Experiment:
        import serial
        trigPort = serial.Serial('/dev/cu.usbmodem11201');
        trigger = 1;
        stim_dur = 0.166
      Begin Routine:
        t = trigger.to_bytes(1, 'little')
        trigPort.write(t)
      End Experiment:
        trigPort.close
    ImageComponent first_image
      image = checkerboard1.jpg
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_dur
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  Routine phase2
    CodeComponent trigger1
      Code Type = Auto->JS
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      Begin Routine:
        t = trigger.to_bytes(1, 'little')
        trigPort.write(t)
      End Experiment:
        trigPort.close
      End Routine:
        trigPort.write(str.encode('0'))
    ImageComponent secondimage
      image = checkerboard2.jpg
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_dur
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  Routine blank_2
  Routine blank
    PolygonComponent newfix
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_dur
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        trigger = 2;
        t = trigger.to_bytes(1, 'little')
        trigPort.write(t)
      End Experiment:
        trigPort.close
      End Routine:
        trigPort.write(str.encode('0'))
  Routine delay
    PolygonComponent delay_fix
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine phase1
    Routine phase2
  LoopTerminator trials
