PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trigger_sample
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import serial
        trigPort = serial.Serial('/dev/cu.usbmodem1201');
        trigger = 1;
        stim_dur = 1
      Begin Routine:
        t = trigger.to_bytes(1, 'little')
        trigPort.write(t)
      End Experiment:
        trigPort.close
    PolygonComponent fixation
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_dur
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 150
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    Routine trial
  LoopTerminator trials
